// Description: bspline, MI, SGD

//ImageTypes
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

//Components
(Registration "MultiResolutionRegistration")
//(FixedImagePyramid "FixedSmoothingImagePyramid")
//(MovingImagePyramid "MovingSmoothingImagePyramid")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

(ErodeMask "false" )
(UseDirectionCosines "true")

(NumberOfResolutions 4)
(FinalGridSpacingInPhysicalUnits 16.0 16.0 16.0)

(FixedImagePyramidSchedule 8 8 8 4 4 4 2 2 2 1 1 1)
(MovingImagePyramidSchedule 8 8 8 4 4 4 2 2 2 1 1 1)

(HowToCombineTransforms "Compose")

(WriteTransformParametersEachIteration "false")
(WriteResultImage "false")
(CompressResultImage "true")
(ResultImageFormat "nii")
(ResultImagePixelType "unsigned char")
(WriteResultImageAfterEachResolution "false") 
(ShowExactMetricValue "false")

// Option supported in elastix 4.1:
(UseFastAndLowMemoryVersion "true")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 2000 ) 

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 1 )
(UseRandomSampleRegion "false")
//(SampleRegionSize 50.0 50.0 50.0)
(NumberOfSpatialSamples 2000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 0)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 20.0 )
(MaximumStepLength 1)
